#################
#### Scorers ####
#################

//number of particles interacting with the detector material

includeFile = GM_final.txt


s:Sc/TargetScorer/Quantity 	= "EnergyDeposit" 
s:Sc/TargetScorer/OutputType 	= "root" 
i:Sc/TargetScorer/HistogramBins = 1000 	
d:Sc/TargetScorer/HistogramMin = 0. keV
d:Sc/TargetScorer/HistogramMax = 5000. keV
#sv:Sc/TargetScorer/Report = 1 "CumulativeVolumeHistogram"
s:Sc/TargetScorer/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/TargetScorer/IncludeParticleID = "True"
#i:Sc/TargetScorer/ZBins = 10000 # defaults to 1, that is, un-binned
#d:Sc/TargetScorer/ZBinMin = -2. cm # defaults to zero
#d:Sc/TargetScorer/ZBinMax = -1.5 cm # must be specified if EBins is greater than 1

s:Gr/Graphic/Type = "OpenGL"
s:Gr/Graphic/FileName = "File"
b:Gr/Graphic/IncludeGeometry = "True" 
b:Gr/Graphic/IncludeTrajectories = "True" 
b:Gr/Graphic/IncludeStepPoints = "True"

s:Sc/TargetScorer/Component 	= "GasCylinder"
s:Sc/TargetScorer/OutputFile 	= "GM"